PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SENSE_IAT
  exportHTML = on Save
  frameRateMsg = Veuillez patienter...
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Bienvenue dans ce Test d'Associations Implicites.

        Pour effectuer ce test, vous n'aurez besoin que de votre clavier. Il durera environ 5 minutes. vous pouvez quitter le test à tout moment en appuyant sur la touche échap de votre clavier.

        Appuyez sur la barre espace pour passer à l'étape suivante.
    KeyboardComponent welcome_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
      syncScreenRefresh = False
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  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent instructions_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent continuer
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre espace pour continuer.
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  Routine words
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    TextComponent all_words
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Voici les catégories et les mots associés utilisés lors de ce test :
        Féminin : Demoiselle, Femme, Tante, Fille, Féminin

        Masculin : Garçon, Homme, Oncle, Fils, Masculin

        Sciences : Biologie, Physique, Chimie, Mathématiques, Informatique

        Lettres : Philosophie, Humanités, Arts, Littérature, Latin

        Appuyez sur la barre espace pour continuer
    KeyboardComponent words_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
      syncScreenRefresh = False
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  Routine ready
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    TextComponent ready_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Voici les catégories dans lesquelles vous devrez classer les mots qui apparaîtront à l'écran.

        Positionnez vos doigts sur les touches "E" et "I".

        Appuyez sur la barre espace pour commencer.
    KeyboardComponent ready_end
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent ready_cat_left
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_left
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    TextComponent ready_cat_right
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_right
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  Routine trial
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    CodeComponent check_corr
      Code Type = Py
      Each Frame:
        if len(keyboard_resp.keys) > 0 and keyboard_resp.keys[-1] == CorrAns: #vérifie si la touche est correcte et passe à l'essai suivant le cas échéant
            keyboard_resp.corr = True
            continueRoutine = False

        if len(keyboard_resp.keys) > 0 and keyboard_resp.keys[0] != CorrAns: #affiche le message "erreur" si la première touche appuyée n'est pas la bonne
            err_opacity = 100
        else:
            err_opacity = 0
    TextComponent text_stim
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimWord
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    TextComponent trial_cat_left
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $label_left
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    TextComponent trial_cat_right
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $label_right
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    KeyboardComponent keyboard_resp
      allowedKeys [set every repeat] = 'e','i'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      store = all keys
      storeCorrect = True
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    TextComponent fixation
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent compute_score
      Code Type = Py
      Begin Experiment:
        rt_block3 = []
        err_block3 = 0
        rt_block5 = []
        err_block5 = 0
        fast_responses = 0
        slow_responses = 0
        total_responses = 0
        num_errors = 0
      End Routine:
        if conds_file == "cong_test.xlsx": #ajout du temps de réponse pour le bloc congruent
            if isinstance(keyboard_resp.rt[-1], float):
                rt_block3.append(keyboard_resp.rt[-1])
                if keyboard_resp.rt[-1] < 0.3: #vérification si la réponse est trop rapide
                    fast_responses = fast_responses + 1
                if keyboard_resp.keys[0] != CorrAns: #calcul du nb d'erreurs du bloc congruent
                    err_block3 = err_block3 + 1
        elif conds_file == "incong_test.xlsx": #ajout du temps de réponse pour le bloc incongruent
            if isinstance(keyboard_resp.rt[-1], float):
                rt_block5.append(keyboard_resp.rt[-1]) #vérification si la réponse est trop rapide
                if keyboard_resp.rt[-1] < 0.3:
                    fast_responses = fast_responses + 1
                if keyboard_resp.keys[0] != CorrAns: #calcul du nb d'erreurs du bloc incongruent
                    err_block5 = err_block5 + 1

        if keyboard_resp.keys[0] != CorrAns:
            num_errors = num_errors+ 1

        if keyboard_resp.rt[-1] > 1:
            slow_responses = slow_responses + 1

        total_responses = total_responses + 1
    TextComponent error_msg
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      opacity [set every frame] = err_opacity
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = Erreur
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  Routine questions
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    SliderComponent questions_ans_slider
      disabled = True
      forceEndRoutine = True
      granularity = 1
      labels = (1, 2, 3, 4, 5)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5)
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    TextComponent questions_question
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = La question
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  Routine score
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    CodeComponent score
      Code Type = Py
      Before Experiment:
        import numpy as np
      Begin Experiment:
        numRep = 1
        finish_cond = False
      Begin Routine:
        if (fast_responses / total_responses) > 0.1:
            score_msg = "Vous avez répondu trop rapidement pour obtenir un score valide. Recommencez le test avec en répondant correctement et sans vous précipiter"
            err_msg = "Vous avez fait "+str(num_errors)+" erreurs"
        elif (slow_responses / total_responses) > 0.1:
            score_msg = "Vous avez répondu trop lentement pour obtenir un score valide. Recommencez le test avec en répondant correctement le plus rapidement possible"
            err_msg = "Vous avez fait "+str(num_errors)+" erreurs"
        else:
            for rt in rt_block3: #retire les éléments aberrants (-de 0.2s ou + de 2s du calcul du score)
                if rt < 0.2 or rt > 2 :
                    rt_block3.remove(rt)
            for rt in rt_block5:
                if rt < 0.2 or rt > 2  :
                    rt_block5.remove(rt)
            # Calcul des écarts types et moyennes
            std_rt_block3 = np.std(rt_block3, ddof=1)
            std_rt_block5 = np.std(rt_block5, ddof=1)
            mean_rt_block3 = sum(rt_block3)/len(rt_block3)
            mean_rt_block5 = sum(rt_block5)/len(rt_block5)

            # Calcul de l'écart type groupé
            pooled_std = np.sqrt(((len(rt_block3) - 1) * std_rt_block3**2 + (len(rt_block5) - 1) * std_rt_block5**2) / (len(rt_block3) + len(rt_block5) - 2))

            #Calcul du score
            if num_errors == 0 :
                iat_score = (mean_rt_block5 - mean_rt_block3)/pooled_std #calcul à partir du temps de réponse entre bloc incongruent et bloc congruent
            else:
                iat_score = ((mean_rt_block5 + err_block5/num_errors) - (mean_rt_block3 + err_block3/num_errors))/pooled_std #calcul à partir du temps de réponse et du nombre d'erreurs entre bloc incongruent et bloc congruent

            # Affichage des résultats
            score_msg = "Votre score à l'IAT est de "+str(iat_score)[:5]
            err_msg = "Vous avez fait "+str(num_errors)+" erreurs"
      Each Frame:
        if end_score.corr == True:
            finish_cond = True
            #restart.finish = True

        #if end_score.keys == 'r' and end_score.keys:
            #numRep = 2
        if end_score.keys == 'space':
            #numRep = 1
            #restart.finish = True
            finish_cond = True

        #telle quelle, l'option permettant de recommencer l'expérience ne fonctionne pas
    TextComponent score_feedback
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $score_msg
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    TextComponent score_meaning
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Un score positif indique que vous avez tendance à associer les hommes aux sciences et les femmes aux lettres, ce qui correspond à la vision stéréotypée. Plus il est élevé, plus les associations sont fortes.
        A l'inverse, un score négatif indique une association forte entre les femmes et les sciences et les hommes et les lettres.

        Pour terminer le test, appuyez sur la barre espace.
    KeyboardComponent end_score
      allowedKeys = 'space','r',
      correctAns = $CorrRepAns
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent err_feedback
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $err_msg
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  Routine end
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ce test d'associations implicites est terminé. Nous vous remercions d'y avoir pris part. Aucune donnée n'est conservée à l'issue de ce test, qui ne sert qu'à rendre compte de ses propres stéréotypes. Ainsi, si votre score est positif, vous êtes sujets aux stéréotypes sur les femmes dans les sciences.

        Vous pouvez quitter l'expérience en appuyant sur la touche échap.
  Routine transition
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    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine check_end
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if finish_cond == True:
            restart.finish = True
Flow
  LoopInitiator restart loopType="TrialHandler"
    conditions = [{'CorrRepAns': 'space'}]
    conditionsFile = Repetitions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine welcome
    LoopInitiator instructions_loop loopType="TrialHandler"
      conditionsFile = instructs.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'pageNum': 1, 'instruct_text': 'Des mots vont apparaître au centre de l\'écran. Vous devrez les classer en utilisant les touches "E" et "I" de votre clavier.\n\nEssayez d\'être le plus rapide possible et de ne pas faire d\'erreurs.'},
        {'pageNum': 2, 'instruct_text': 'Les touches "E" et "I" du clavier seront toujours associées à une catégorie qui sera affichée.\nChaque mot a une classification correcte.\nGardez vos doigts sur les touches "E" et "I" pour garantir un temps de réponse rapide.\nLe test ne donne pas de résultat si vous répondez trop lentement. Répondez-donc le plus rapidement possible.'}]
      Routine instructions
    LoopTerminator instructions_loop
    Routine words
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = blocks_order.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'conds_file': 'pos_neg_train.xlsx', 'label_left': '"E" = Sciences', 'label_right': '"I" =  Lettres'},
        {'conds_file': 'cong_train.xlsx', 'label_left': '"E" = Masculin', 'label_right': '"I" =  Féminin'},
        {'conds_file': 'cong_test.xlsx', 'label_left': '"E" = Masculin ou Sciences', 'label_right': '"I" =  Féminin ou Lettres'},
        {'conds_file': 'incong_train.xlsx', 'label_left': '"E" = Féminin', 'label_right': '"I" =  Masculin'},
        {'conds_file': 'incong_test.xlsx', 'label_left': '"E" = Féminin ou Sciences', 'label_right': '"I" =  Masculin ou Lettres'}]
      Routine ready
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $conds_file
        loopType = random
        nReps = 1
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        Routine trial
        Routine transition
      LoopTerminator trials
    LoopTerminator blocks
    Routine score
    Routine check_end
  LoopTerminator restart
  Routine end
